---
API: 3
Title: Boundary paradigm
Description: Gaze-contingent display change with the published Spanish sentences
OpenSesame: 4.1.0
Platform: posix
---
set width 1920
set height 1080
set uniform_coordinates yes
set transparent_variables no
set title "Boundary paradigm"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set color_backend legacy
set canvas_backend legacy
set clock_backend legacy
set sampler_backend legacy
set fullscreen no
set font_size 24
set font_family mono
set font_bold no
set font_italic no
set font_underline no
set foreground black
set background white
set bidi no
set compensation 0
set coordinates relative
set description "Gaze-contingent display change with the published Spanish sentences"
define sequence experiment
	set flush_keyboard yes
	set description "Main sequence"
	run pygaze_init always
	run setup_helpers always
	run instructions always
	run practice_loop always
	run end_of_practice always
	run experimental_loop_1 always
	run break_instr always
	run experimental_loop_2 always
	run break_instr always
	run experimental_loop_3 always
	run goodbye always

define sequence trial_sequence
	set flush_keyboard yes
	set description "One trial"
	run setup_condition always
	run prepare_trial always
	run drift_correct always
	run start_recording always
	run log_trial always
	run show_gaze_target always
	run trial_display always
	run comprehension_question "[question] != \"NA\" and [trial_aborted] == 0"
	run keyboard_response "[question] != \"NA\" and [trial_aborted] == 0"
	run clear_screen always
	run logger always
	run stop_recording always

define pygaze_init pygaze_init
	set tracker_type "Advanced dummy (mouse simulation)"
	set calibrate yes
	set calbeep no
	set _logfile automatic
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set alea_api_key "Contact Alea for an API key"
	set alea_animated_calibration no
	set eyelink_force_drift_correct yes
	set eyelink_pupil_size_mode area
	set smi_ip 127.0.0.1
	set smi_send_port 4444
	set smi_recv_port 5555
	set tobiiglasses_address 192.168.71.50
	set tobiiglasses_udpport 49152
	set description "Initialize and calibrate the eye tracker (advanced dummy: mouse = gaze)"

define pygaze_drift_correct drift_correct
	set xpos 0
	set ypos 0
	set fixation_triggered no
	set target_color "[foreground]"
	set target_style default
	set draw_target yes
	set description "Drift correction at screen centre"

define pygaze_start_recording start_recording
	set status_msg "start_trial [count_trial_sequence]"
	set description "Start recording"

define pygaze_stop_recording stop_recording
	set status_msg stop_trial
	set description "Stop recording"

define pygaze_log log_trial
	set throttle 2
	set auto_log no
	set msg "TRIALINFO item={item}"
	set description "Log trial info"

define logger logger
	set description "Default logger"
	set auto_log yes

define inline_script setup_helpers
	set description "Define shared geometry and gaze helpers"
	___prepare__

	__end__
	___run__
	from openexp.canvas import Canvas
	from openexp.keyboard import Keyboard

	W, H = var.width, var.height

	GAZE_SIZE = 50
	GAZE_LEFT = 100
	SENTENCE_LEFT = GAZE_LEFT + GAZE_SIZE // 2   # sentence starts in the target
	CORNER_X = int(W * .9)
	CORNER_Y = int(H * .9)
	CORNER_SIZE = max(6, int(W * .005))

	_probe = Canvas(exp)
	CHARW = _probe.text_size('x')[0]             # monospace: constant char width

	kb = Keyboard(exp, keylist=['escape'], timeout=0)


	def add_corner(c):
	    """Draw the small square that participants fixate to end the trial."""
	    c.rect(int(W * .94) - W // 2, int(H * .94) - H // 2,
	           CORNER_SIZE, CORNER_SIZE, fill=True, color='black')


	def text_canvas(txt):
	    """Left-aligned sentence at the published position, vertically centred."""
	    c = Canvas(exp)
	    c.text(txt, center=False, x=SENTENCE_LEFT - W // 2, color='black')
	    add_corner(c)
	    return c


	def gaze_char(x):
	    """Character index at an absolute gaze x coordinate."""
	    return int((x - SENTENCE_LEFT) // CHARW)


	def on_gaze_target(x, y):
	    return (GAZE_LEFT <= x <= GAZE_LEFT + GAZE_SIZE and
	            H / 2 - GAZE_SIZE / 2 <= y <= H / 2 + GAZE_SIZE / 2)


	def on_corner(x, y):
	    return x > CORNER_X and y > CORNER_Y


	def wait_for_fixation(region, duration=250, timeout=None):
	    """Wait until gaze stays inside `region` for `duration` ms.

	    Returns True on success, False on timeout or when Escape is pressed.
	    """
	    t0 = clock.time()
	    since = None
	    while True:
	        x, y = eyetracker.sample()
	        if region(x, y):
	            if since is None:
	                since = clock.time()
	            elif clock.time() - since >= duration:
	                return True
	        else:
	            since = None
	        key, _ = kb.get_key(timeout=0)
	        if key == 'escape':
	            return False
	        if timeout is not None and clock.time() - t0 >= timeout:
	            return False
	        clock.sleep(5)


	def gaze_target_canvas():
	    c = Canvas(exp)
	    c.rect(GAZE_LEFT - W // 2, -GAZE_SIZE // 2, GAZE_SIZE, GAZE_SIZE,
	           fill=True, color='black')
	    return c
	__end__

define sketchpad instructions
	set start_response_interval no
	set duration keypress
	set description "Instructions"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=True text="Read each sentence silently.<br /><br />Keep your eyes on the black square at the start of the sentence; the sentence appears once you fixate it.<br /><br />When you have finished reading, look at the small black square in the bottom-right corner.<br /><br />Then answer the yes/no question in Spanish: press 1 for SI, 2 for NO.<br /><br />Press any key to start." x=0 y=0 z_index=0

define sketchpad goodbye
	set start_response_interval no
	set duration keypress
	set description "Goodbye"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=True text="The experiment is finished.<br />Thank you!" x=0 y=0 z_index=0

define sketchpad comprehension_question
	set start_response_interval no
	set duration 0
	set description "Comprehension question"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="[question]" x=0 y=-64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="SI" x=-128 y=64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="NO" x=128 y=64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="1 = SI&nbsp;&nbsp;&nbsp;2 = NO" x=0 y=160 z_index=0

define keyboard_response keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects the yes/no response"
	set correct_response "[correct_button]"
	set allowed_responses "1;2"

define sketchpad clear_screen
	set start_response_interval no
	set duration 0
	set description "Blank screen after the response"

define sketchpad end_of_practice
	set start_response_interval no
	set duration keypress
	set description "End of practice"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=True text="You have finished the practice block.<br /><br />If you have any questions, ask the experimenter now.<br /><br />Press any key to start the experiment." x=0 y=0 z_index=0

define sketchpad break_instr
	set start_response_interval no
	set duration keypress
	set description "Break"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=True text="You can take a short break.<br /><br />Press any key to continue." x=0 y=0 z_index=0

define loop practice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item trial_sequence
	set description "Practice trials"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if False
	set column_order "item;block;sentence_number;pretarget;target;posttarget;changed;question;answer"
	setcycle 0 item "901"
	setcycle 0 block "practice"
	setcycle 0 sentence_number "901"
	setcycle 0 pretarget "El artista creó"
	setcycle 0 target "una"
	setcycle 0 posttarget "hermosa pieza de escultura en mármol."
	setcycle 0 changed "una"
	setcycle 0 question "¿Era una figura de arcilla?"
	setcycle 0 answer "NO"
	setcycle 1 item "902"
	setcycle 1 block "practice"
	setcycle 1 sentence_number "902"
	setcycle 1 pretarget "Realicé"
	setcycle 1 target "la"
	setcycle 1 posttarget "compra para la semana en el supermercado."
	setcycle 1 changed "la"
	setcycle 1 question "NA"
	setcycle 1 answer "NA"
	setcycle 2 item "903"
	setcycle 2 block "practice"
	setcycle 2 sentence_number "903"
	setcycle 2 pretarget "La lógica es fundamental"
	setcycle 2 target "para"
	setcycle 2 posttarget "resolver problemas matemáticos."
	setcycle 2 changed "para"
	setcycle 2 question "NA"
	setcycle 2 answer "NA"
	setcycle 3 item "904"
	setcycle 3 block "practice"
	setcycle 3 sentence_number "904"
	setcycle 3 pretarget "Disfrutamos la lluvia suave en"
	setcycle 3 target "la"
	setcycle 3 posttarget "tarde de verano."
	setcycle 3 changed "la"
	setcycle 3 question "¿Estaba soleado?"
	setcycle 3 answer "NO"
	setcycle 4 item "905"
	setcycle 4 block "practice"
	setcycle 4 sentence_number "905"
	setcycle 4 pretarget "Aprendí la letra de"
	setcycle 4 target "esa"
	setcycle 4 posttarget "canción en cuestión de minutos."
	setcycle 4 changed "esa"
	setcycle 4 question "¿Aprendo rápido?"
	setcycle 4 answer "SI"
	setcycle 5 item "906"
	setcycle 5 block "practice"
	setcycle 5 sentence_number "906"
	setcycle 5 pretarget "Decidimos decorar"
	setcycle 5 target "el"
	setcycle 5 posttarget "patio trasero con luces para la fiesta."
	setcycle 5 changed "el"
	setcycle 5 question "NA"
	setcycle 5 answer "NA"
	setcycle 6 item "907"
	setcycle 6 block "practice"
	setcycle 6 sentence_number "907"
	setcycle 6 pretarget "El capitán obtuvo"
	setcycle 6 target "el"
	setcycle 6 posttarget "rango de comandante por su valentía."
	setcycle 6 changed "el"
	setcycle 6 question "NA"
	setcycle 6 answer "NA"
	setcycle 7 item "908"
	setcycle 7 block "practice"
	setcycle 7 sentence_number "908"
	setcycle 7 pretarget "La escritora compartió"
	setcycle 7 target "un"
	setcycle 7 posttarget "emotivo relato en su último libro."
	setcycle 7 changed "un"
	setcycle 7 question "NA"
	setcycle 7 answer "NA"
	setcycle 8 item "909"
	setcycle 8 block "practice"
	setcycle 8 sentence_number "909"
	setcycle 8 pretarget "El diseñador de moda creó"
	setcycle 8 target "un"
	setcycle 8 posttarget "hermoso patrón floral para el vestido."
	setcycle 8 changed "un"
	setcycle 8 question "¿Será un vestido con flores?"
	setcycle 8 answer "SI"
	setcycle 9 item "910"
	setcycle 9 block "practice"
	setcycle 9 sentence_number "910"
	setcycle 9 pretarget "El gobierno llevó a cabo"
	setcycle 9 target "un"
	setcycle 9 posttarget "censo para recopilar datos demográficos."
	setcycle 9 changed "un"
	setcycle 9 question "NA"
	setcycle 9 answer "NA"
	run trial_sequence

define loop experimental_loop_1
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "Experimental block 1"
	set cycles 70
	set continuous no
	set break_if_on_first yes
	set break_if False
	set column_order "item;block;sentence_number;pretarget;target;posttarget;changed;question;answer"
	setcycle 0 item "1"
	setcycle 0 block "1"
	setcycle 0 sentence_number "1"
	setcycle 0 pretarget "El arquitecto criticó"
	setcycle 0 target "la"
	setcycle 0 posttarget "forma de trabajar del albañil."
	setcycle 0 changed "el"
	setcycle 0 question "¿El albañil criticó al arquitecto?"
	setcycle 0 answer "NO"
	setcycle 1 item "2"
	setcycle 1 block "1"
	setcycle 1 sentence_number "2"
	setcycle 1 pretarget "En este mapa no puedo ver"
	setcycle 1 target "la"
	setcycle 1 posttarget "zona que dices."
	setcycle 1 changed "el"
	setcycle 1 question "¿El mapa muestra lo necesario?"
	setcycle 1 answer "NO"
	setcycle 2 item "3"
	setcycle 2 block "1"
	setcycle 2 sentence_number "3"
	setcycle 2 pretarget "Para aprobar solo tienes que dominar"
	setcycle 2 target "la"
	setcycle 2 posttarget "suma y nada más."
	setcycle 2 changed "el"
	setcycle 2 question "¿En el examen habrá divisiones?"
	setcycle 2 answer "NO"
	setcycle 3 item "4"
	setcycle 3 block "1"
	setcycle 3 sentence_number "4"
	setcycle 3 pretarget "Eso es erróneo según"
	setcycle 3 target "la"
	setcycle 3 posttarget "teoría más actual."
	setcycle 3 changed "el"
	setcycle 3 question "¿Es correcto?"
	setcycle 3 answer "NO"
	setcycle 4 item "5"
	setcycle 4 block "1"
	setcycle 4 sentence_number "5"
	setcycle 4 pretarget "Estamos todos juntos en"
	setcycle 4 target "la"
	setcycle 4 posttarget "lucha por un mundo más justo."
	setcycle 4 changed "el"
	setcycle 4 question "¿Es asunto de una sola persona?"
	setcycle 4 answer "NO"
	setcycle 5 item "6"
	setcycle 5 block "1"
	setcycle 5 sentence_number "6"
	setcycle 5 pretarget "Este juez imparte siempre"
	setcycle 5 target "la"
	setcycle 5 posttarget "pena más dura."
	setcycle 5 changed "el"
	setcycle 5 question "¿Es un juez estricto?"
	setcycle 5 answer "SI"
	setcycle 6 item "7"
	setcycle 6 block "1"
	setcycle 6 sentence_number "7"
	setcycle 6 pretarget "Hablamos con"
	setcycle 6 target "el"
	setcycle 6 posttarget "autor durante la firma de libros."
	setcycle 6 changed "la"
	setcycle 6 question "¿Acudimos a un evento?"
	setcycle 6 answer "SI"
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	setcycle 8 item "9"
	setcycle 8 block "1"
	setcycle 8 sentence_number "9"
	setcycle 8 pretarget "La noticia recorrió"
	setcycle 8 target "el"
	setcycle 8 posttarget "país causando gran conmoción."
	setcycle 8 changed "la"
	setcycle 8 question "¿Dejó a la gente indiferente?"
	setcycle 8 answer "NO"
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	setcycle 12 item "13"
	setcycle 12 block "1"
	setcycle 12 sentence_number "13"
	setcycle 12 pretarget "Sigue negando"
	setcycle 12 target "los"
	setcycle 12 posttarget "actos delictivos."
	setcycle 12 changed "las"
	setcycle 12 question "¿Ha asumido lo que pasó?"
	setcycle 12 answer "NO"
	setcycle 13 item "14"
	setcycle 13 block "1"
	setcycle 13 sentence_number "14"
	setcycle 13 pretarget "El árbol fue alcanzado por"
	setcycle 13 target "los"
	setcycle 13 posttarget "rayos y empezó a arder."
	setcycle 13 changed "las"
	setcycle 13 question "¿Se incendió?"
	setcycle 13 answer "SI"
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	setcycle 18 item "19"
	setcycle 18 block "1"
	setcycle 18 sentence_number "19"
	setcycle 18 pretarget "Los cuadernos estaban llenos de dibujos hechos por"
	setcycle 18 target "las"
	setcycle 18 posttarget "niñas pequeñas."
	setcycle 18 changed "los"
	setcycle 18 question "¿La niña dibuja mucho?"
	setcycle 18 answer "SI"
	setcycle 19 item "20"
	setcycle 19 block "1"
	setcycle 19 sentence_number "20"
	setcycle 19 pretarget "Se educado con"
	setcycle 19 target "las"
	setcycle 19 posttarget "visitas esta tarde."
	setcycle 19 changed "los"
	setcycle 19 question "¿La visita es mañana?"
	setcycle 19 answer "NO"
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	setcycle 24 item "25"
	setcycle 24 block "1"
	setcycle 24 sentence_number "25"
	setcycle 24 pretarget "El lechero deja las botellas en la puerta por"
	setcycle 24 target "la"
	setcycle 24 posttarget "mañana temprano."
	setcycle 24 changed "el"
	setcycle 24 question "NA"
	setcycle 24 answer "NA"
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	setcycle 36 item "37"
	setcycle 36 block "1"
	setcycle 36 sentence_number "37"
	setcycle 36 pretarget "El ladrón esquivó"
	setcycle 36 target "los"
	setcycle 36 posttarget "ataques del policía."
	setcycle 36 changed "las"
	setcycle 36 question "NA"
	setcycle 36 answer "NA"
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	setcycle 48 item "49"
	setcycle 48 block "1"
	setcycle 48 sentence_number "49"
	setcycle 48 pretarget "Miramos hacia"
	setcycle 48 target "el"
	setcycle 48 posttarget "lado buscando al oso."
	setcycle 48 changed "la"
	setcycle 48 question "NA"
	setcycle 48 answer "NA"
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	setcycle 59 item "60"
	setcycle 59 block "1"
	setcycle 59 sentence_number "60"
	setcycle 59 pretarget "Después de entrenar estamos listas para"
	setcycle 59 target "las"
	setcycle 59 posttarget "carreras solidarias."
	setcycle 59 changed "los"
	setcycle 59 question "NA"
	setcycle 59 answer "NA"
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	run trial_sequence

define loop experimental_loop_2
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "Experimental block 2"
	set cycles 70
	set continuous no
	set break_if_on_first yes
	set break_if False
	set column_order "item;block;sentence_number;pretarget;target;posttarget;changed;question;answer"
	setcycle 0 item "71"
	setcycle 0 block "2"
	setcycle 0 sentence_number "71"
	setcycle 0 pretarget "En clase de historia estamos haciendo un trabajo sobre"
	setcycle 0 target "la"
	setcycle 0 posttarget "guerra actual."
	setcycle 0 changed "el"
	setcycle 0 question "¿Es un trabajo sobre un conflicto?"
	setcycle 0 answer "SI"
	setcycle 1 item "72"
	setcycle 1 block "2"
	setcycle 1 sentence_number "72"
	setcycle 1 pretarget "Se nota que es calmado por"
	setcycle 1 target "la"
	setcycle 1 posttarget "manera de hablar que tiene."
	setcycle 1 changed "el"
	setcycle 1 question "¿Es una persona tranquila?"
	setcycle 1 answer "SI"
	setcycle 2 item "73"
	setcycle 2 block "2"
	setcycle 2 sentence_number "73"
	setcycle 2 pretarget "Hay mucha producción de aceite en"
	setcycle 2 target "la"
	setcycle 2 posttarget "región del sur."
	setcycle 2 changed "el"
	setcycle 2 question "¿Es una región productora?"
	setcycle 2 answer "SI"
	setcycle 3 item "74"
	setcycle 3 block "2"
	setcycle 3 sentence_number "74"
	setcycle 3 pretarget "He olvidado limpiar"
	setcycle 3 target "la"
	setcycle 3 posttarget "sala del fondo."
	setcycle 3 changed "el"
	setcycle 3 question "¿Está todo limpio?"
	setcycle 3 answer "NO"
	setcycle 4 item "75"
	setcycle 4 block "2"
	setcycle 4 sentence_number "75"
	setcycle 4 pretarget "En el centro de la ciudad puedes encontrar"
	setcycle 4 target "la"
	setcycle 4 posttarget "plaza más antigua."
	setcycle 4 changed "el"
	setcycle 4 question "¿Estamos hablando del campo?"
	setcycle 4 answer "NO"
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	setcycle 6 item "77"
	setcycle 6 block "2"
	setcycle 6 sentence_number "77"
	setcycle 6 pretarget "El documental va sobre"
	setcycle 6 target "el"
	setcycle 6 posttarget "juicio del año pasado."
	setcycle 6 changed "la"
	setcycle 6 question "¿Es un documental futurista?"
	setcycle 6 answer "NO"
	setcycle 7 item "78"
	setcycle 7 block "2"
	setcycle 7 sentence_number "78"
	setcycle 7 pretarget "No puedo más, voy a tomarme la medicación para"
	setcycle 7 target "el"
	setcycle 7 posttarget "dolor de espalda."
	setcycle 7 changed "la"
	setcycle 7 question "¿Es una sensación muy molesta?"
	setcycle 7 answer "SI"
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	setcycle 12 item "83"
	setcycle 12 block "2"
	setcycle 12 sentence_number "83"
	setcycle 12 pretarget "No quiero quedarme en la ciudad durante"
	setcycle 12 target "los"
	setcycle 12 posttarget "veranos calurosos."
	setcycle 12 changed "las"
	setcycle 12 question "¿Me apetece quedarme en la ciudad en verano?"
	setcycle 12 answer "NO"
	setcycle 13 item "84"
	setcycle 13 block "2"
	setcycle 13 sentence_number "84"
	setcycle 13 pretarget "Jugando a las cartas pasamos"
	setcycle 13 target "los"
	setcycle 13 posttarget "ratos en el pueblo."
	setcycle 13 changed "las"
	setcycle 13 question "¿Nos entretenemos con juegos de mesa?"
	setcycle 13 answer "SI"
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	setcycle 18 item "89"
	setcycle 18 block "2"
	setcycle 18 sentence_number "89"
	setcycle 18 pretarget "Disfruté mucho al dar"
	setcycle 18 target "las"
	setcycle 18 posttarget "vueltas en la noria."
	setcycle 18 changed "los"
	setcycle 18 question "¿Me lo pasé bien?"
	setcycle 18 answer "SI"
	setcycle 19 item "90"
	setcycle 19 block "2"
	setcycle 19 sentence_number "90"
	setcycle 19 pretarget "No puedo vencerte con"
	setcycle 19 target "las"
	setcycle 19 posttarget "fuerzas que tengo."
	setcycle 19 changed "los"
	setcycle 19 question "¿Me siento invencible?"
	setcycle 19 answer "NO"
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	setcycle 24 item "95"
	setcycle 24 block "2"
	setcycle 24 sentence_number "95"
	setcycle 24 pretarget "Es muy bonito sentirse uno más entre"
	setcycle 24 target "la"
	setcycle 24 posttarget "gente del lugar."
	setcycle 24 changed "el"
	setcycle 24 question "NA"
	setcycle 24 answer "NA"
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	setcycle 36 item "107"
	setcycle 36 block "2"
	setcycle 36 sentence_number "107"
	setcycle 36 pretarget "El genio cumplirá"
	setcycle 36 target "los"
	setcycle 36 posttarget "deseos que pidas."
	setcycle 36 changed "las"
	setcycle 36 question "NA"
	setcycle 36 answer "NA"
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	setcycle 47 item "118"
	setcycle 47 block "2"
	setcycle 47 sentence_number "118"
	setcycle 47 pretarget "Creo que si miras"
	setcycle 47 target "el"
	setcycle 47 posttarget "punto fijamente empezarás a ver que se mueve."
	setcycle 47 changed "la"
	setcycle 47 question "NA"
	setcycle 47 answer "NA"
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	setcycle 58 item "129"
	setcycle 58 block "2"
	setcycle 58 sentence_number "129"
	setcycle 58 pretarget "La calidad no siempre reside en"
	setcycle 58 target "las"
	setcycle 58 posttarget "marcas de la ropa."
	setcycle 58 changed "los"
	setcycle 58 question "NA"
	setcycle 58 answer "NA"
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	run trial_sequence

define loop experimental_loop_3
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "Experimental block 3"
	set cycles 70
	set continuous no
	set break_if_on_first yes
	set break_if False
	set column_order "item;block;sentence_number;pretarget;target;posttarget;changed;question;answer"
	setcycle 0 item "141"
	setcycle 0 block "3"
	setcycle 0 sentence_number "141"
	setcycle 0 pretarget "No sé si voy a poder superar"
	setcycle 0 target "la"
	setcycle 0 posttarget "prueba de acceso."
	setcycle 0 changed "el"
	setcycle 0 question "¿Estoy inseguro por test de acceso?"
	setcycle 0 answer "SI"
	setcycle 1 item "142"
	setcycle 1 block "3"
	setcycle 1 sentence_number "142"
	setcycle 1 pretarget "Estamos esperando pacientemente"
	setcycle 1 target "la"
	setcycle 1 posttarget "ayuda pero parece que no llega."
	setcycle 1 changed "el"
	setcycle 1 question "¿Ha llegado el auxilio?"
	setcycle 1 answer "NO"
	setcycle 2 item "143"
	setcycle 2 block "3"
	setcycle 2 sentence_number "143"
	setcycle 2 pretarget "Con este frío ya se ve nieve en"
	setcycle 2 target "la"
	setcycle 2 posttarget "cumbre de la montaña."
	setcycle 2 changed "el"
	setcycle 2 question "¿Hace mucho calor?"
	setcycle 2 answer "NO"
	setcycle 3 item "144"
	setcycle 3 block "3"
	setcycle 3 sentence_number "144"
	setcycle 3 pretarget "En este texto es muy fácil detectar"
	setcycle 3 target "la"
	setcycle 3 posttarget "falta de ortografía."
	setcycle 3 changed "el"
	setcycle 3 question "¿Hay algún error en el texto?"
	setcycle 3 answer "SI"
	setcycle 4 item "145"
	setcycle 4 block "3"
	setcycle 4 sentence_number "145"
	setcycle 4 pretarget "No hay suficiente espacio en"
	setcycle 4 target "la"
	setcycle 4 posttarget "cárcel del condado."
	setcycle 4 changed "el"
	setcycle 4 question "¿Hay espacio de sobra?"
	setcycle 4 answer "NO"
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	setcycle 6 item "147"
	setcycle 6 block "3"
	setcycle 6 sentence_number "147"
	setcycle 6 pretarget "Los niños jugaban felices en"
	setcycle 6 target "el"
	setcycle 6 posttarget "campo verde y soleado."
	setcycle 6 changed "la"
	setcycle 6 question "¿Estaba lloviendo?"
	setcycle 6 answer "NO"
	setcycle 7 item "148"
	setcycle 7 block "3"
	setcycle 7 sentence_number "148"
	setcycle 7 pretarget "Las flores combinarán perfectamente con"
	setcycle 7 target "el"
	setcycle 7 posttarget "centro de mesa."
	setcycle 7 changed "la"
	setcycle 7 question "¿Estamos decorando?"
	setcycle 7 answer "SI"
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	setcycle 12 item "153"
	setcycle 12 block "3"
	setcycle 12 sentence_number "153"
	setcycle 12 pretarget "El abuelo fue con"
	setcycle 12 target "los"
	setcycle 12 posttarget "niños de paseo."
	setcycle 12 changed "las"
	setcycle 12 question "¿Se quedaron en casa?"
	setcycle 12 answer "NO"
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	setcycle 14 item "155"
	setcycle 14 block "3"
	setcycle 14 sentence_number "155"
	setcycle 14 pretarget "Aún podemos escuchar"
	setcycle 14 target "los"
	setcycle 14 posttarget "discos en el reproductor de vinilos."
	setcycle 14 changed "las"
	setcycle 14 question "¿Sigue funcionando el aparato?"
	setcycle 14 answer "SI"
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	setcycle 18 item "159"
	setcycle 18 block "3"
	setcycle 18 sentence_number "159"
	setcycle 18 pretarget "El profesor dejó"
	setcycle 18 target "las"
	setcycle 18 posttarget "cuentas sin corregir."
	setcycle 18 changed "los"
	setcycle 18 question "¿Terminó la corrección?"
	setcycle 18 answer "NO"
	setcycle 19 item "160"
	setcycle 19 block "3"
	setcycle 19 sentence_number "160"
	setcycle 19 pretarget "Me han asignado"
	setcycle 19 target "las"
	setcycle 19 posttarget "misiones más fáciles."
	setcycle 19 changed "los"
	setcycle 19 question "¿Va a ser una misión sencilla?"
	setcycle 19 answer "SI"
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	setcycle 24 item "165"
	setcycle 24 block "3"
	setcycle 24 sentence_number "165"
	setcycle 24 pretarget "El millonario dio a elegir entre"
	setcycle 24 target "la"
	setcycle 24 posttarget "caja sorpresa o un millón de euros."
	setcycle 24 changed "el"
	setcycle 24 question "NA"
	setcycle 24 answer "NA"
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	setcycle 35 item "176"
	setcycle 35 block "3"
	setcycle 35 sentence_number "176"
	setcycle 35 pretarget "Me estoy estresando mucho con"
	setcycle 35 target "los"
	setcycle 35 posttarget "viajes de este verano."
	setcycle 35 changed "las"
	setcycle 35 question "NA"
	setcycle 35 answer "NA"
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	setcycle 47 item "188"
	setcycle 47 block "3"
	setcycle 47 sentence_number "188"
	setcycle 47 pretarget "No me quiere decir"
	setcycle 47 target "el"
	setcycle 47 posttarget "lugar que vamos a visitar."
	setcycle 47 changed "la"
	setcycle 47 question "NA"
	setcycle 47 answer "NA"
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	setcycle 57 item "198"
	setcycle 57 block "3"
	setcycle 57 sentence_number "198"
	setcycle 57 pretarget "Asistieron al evento con"
	setcycle 57 target "las"
	setcycle 57 posttarget "esposas y los hijos."
	setcycle 57 changed "los"
	setcycle 57 question "NA"
	setcycle 57 answer "NA"
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	run trial_sequence

define inline_script setup_condition
	set description "Set the correct response button"
	___prepare__
	if var.answer == 'SI':
	    var.correct_button = '1'
	elif var.answer == 'NO':
	    var.correct_button = '2'
	else:
	    var.correct_button = 'NA'
	# Avoid stale values from the previous trial when the question is skipped.
	var.response = 'NA'
	var.correct = 'NA'
	var.response_time = 'NA'
	var.trial_aborted = 0
	__end__
	___run__

	__end__

define inline_script prepare_trial
	set description "Prepare the trial canvases"
	___prepare__
	# Simplify the published counterbalancing: practice is always identical, and
	# experimental items alternate preview validity with subject parity.
	sentence_number = int(var.sentence_number)
	if var.block == 'practice':
	    var.preview_condition = 'identical'
	elif var.subject_parity == 'odd':
	    var.preview_condition = 'dissimilar' if sentence_number % 2 == 0 else 'identical'
	else:
	    var.preview_condition = 'identical' if sentence_number % 2 == 0 else 'dissimilar'

	posttarget = var.posttarget
	if not posttarget.endswith('.'):
	    posttarget += '.'

	preview_word = var.changed if var.preview_condition == 'dissimilar' else var.target
	pre_sentence = ' '.join([var.pretarget, preview_word, posttarget])
	tar_sentence = ' '.join([var.pretarget, var.target, posttarget])

	pre_canvas = text_canvas(pre_sentence)
	tar_canvas = text_canvas(tar_sentence)

	# Invisible boundary: right edge of the pre-target word + 0.4 character.
	var.target_word_nr = len(var.pretarget.split())
	var.boundary = SENTENCE_LEFT + pre_canvas.text_size(var.pretarget)[0] + 0.4 * CHARW
	eyetracker.log('BOUNDARY x=%d target_word=%d' % (var.boundary, var.target_word_nr))
	__end__
	___run__

	__end__

define inline_script show_gaze_target
	set description "Show the gaze-contingent target and wait for fixation"
	___prepare__
	gazetarget_canvas = gaze_target_canvas()
	__end__
	___run__
	gazetarget_canvas.show()
	eyetracker.log('GAZE TARGET ON')
	if wait_for_fixation(on_gaze_target, duration=250, timeout=10000):
	    var.trial_aborted = 0
	else:
	    var.trial_aborted = 1
	    eyetracker.log('GAZE TARGET TIMEOUT/ABORT')
	__end__

define inline_script trial_display
	set description "Show the stimulus and end the trial at the corner"
	___prepare__

	__end__
	___run__
	if var.trial_aborted:
	    eyetracker.log('TRIAL ABORTED')
	else:
	    pre_canvas.show()
	    eyetracker.log('STIMONSET preview=%s' % var.preview_condition)
	    changed = False
	    t0 = clock.time()
	    while not changed:
	        x, y = eyetracker.sample()
	        if x > var.boundary:
	            t_pre = clock.time()
	            t_post = tar_canvas.show()
	            eyetracker.log('DISPLAYCHANGE latency=%d' % (t_post - t_pre))
	            changed = True
	        key, _ = kb.get_key(timeout=0)
	        if key == 'escape':
	            var.trial_aborted = 1
	            break
	        if clock.time() - t0 > 60000:
	            eyetracker.log('BOUNDARY TIMEOUT')
	            break
	        clock.sleep(5)
	    var.display_changed = int(changed)
	    if not var.trial_aborted:
	        if not wait_for_fixation(on_corner, duration=100, timeout=60000):
	            eyetracker.log('CORNER TIMEOUT')
	    eyetracker.log('TRIALEND changed=%d' % changed)
	__end__

