---
API: 3
Title: Visual world paradigm
Description: Four-object visual world with gaze target and comprehension questions
OpenSesame: 4.1.0
Platform: posix
---
set width 1920
set height 1080
set uniform_coordinates yes
set transparent_variables no
set title "Visual world paradigm"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set color_backend legacy
set canvas_backend legacy
set clock_backend legacy
set sampler_backend legacy
set fullscreen no
set font_size 24
set font_family mono
set font_bold no
set font_italic no
set font_underline no
set foreground black
set background white
set bidi no
set compensation 0
set coordinates relative
set description "Four-object visual world with gaze target and comprehension questions"
define sequence experiment
	set flush_keyboard yes
	set description "Main sequence"
	run pygaze_init always
	run setup_helpers always
	run instructions always
	run trial_loop always
	run goodbye always

define sequence trial_sequence
	set flush_keyboard yes
	set description "One trial"
	run setup_condition always
	run prepare_trial always
	run drift_correct always
	run start_recording always
	run log_trial always
	run show_gaze_target always
	run trial_display always
	run comprehension_question "[question] != \"NA\" and [trial_aborted] == 0"
	run keyboard_response "[question] != \"NA\" and [trial_aborted] == 0"
	run clear_screen always
	run logger always
	run stop_recording always

define pygaze_init pygaze_init
	set tracker_type "Advanced dummy (mouse simulation)"
	set calibrate yes
	set calbeep no
	set _logfile automatic
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set alea_api_key "Contact Alea for an API key"
	set alea_animated_calibration no
	set eyelink_force_drift_correct yes
	set eyelink_pupil_size_mode area
	set smi_ip 127.0.0.1
	set smi_send_port 4444
	set smi_recv_port 5555
	set tobiiglasses_address 192.168.71.50
	set tobiiglasses_udpport 49152
	set description "Initialize and calibrate the eye tracker (advanced dummy: mouse = gaze)"

define pygaze_drift_correct drift_correct
	set xpos 0
	set ypos 0
	set fixation_triggered no
	set target_color "[foreground]"
	set target_style default
	set draw_target yes
	set description "Drift correction at screen centre"

define pygaze_start_recording start_recording
	set status_msg "start_trial [count_trial_sequence]"
	set description "Start recording"

define pygaze_stop_recording stop_recording
	set status_msg stop_trial
	set description "Stop recording"

define pygaze_log log_trial
	set throttle 2
	set auto_log no
	set msg "TRIALINFO item={item}"
	set description "Log trial info"

define logger logger
	set description "Default logger"
	set auto_log yes

define inline_script setup_helpers
	set description "Define shared geometry and gaze helpers"
	___prepare__

	__end__
	___run__
	from openexp.canvas import Canvas
	from openexp.keyboard import Keyboard

	W, H = var.width, var.height

	GAZE_SIZE = 50
	GAZE_LEFT = 100
	SENTENCE_LEFT = GAZE_LEFT + GAZE_SIZE // 2   # sentence starts in the target
	CORNER_X = int(W * .9)
	CORNER_Y = int(H * .9)
	CORNER_SIZE = max(6, int(W * .005))

	_probe = Canvas(exp)
	CHARW = _probe.text_size('x')[0]             # monospace: constant char width

	kb = Keyboard(exp, keylist=['escape'], timeout=0)


	def add_corner(c):
	    """Draw the small square that participants fixate to end the trial."""
	    c.rect(int(W * .94) - W // 2, int(H * .94) - H // 2,
	           CORNER_SIZE, CORNER_SIZE, fill=True, color='black')


	def text_canvas(txt):
	    """Left-aligned sentence at the published position, vertically centred."""
	    c = Canvas(exp)
	    c.text(txt, center=False, x=SENTENCE_LEFT - W // 2, color='black')
	    add_corner(c)
	    return c


	def gaze_char(x):
	    """Character index at an absolute gaze x coordinate."""
	    return int((x - SENTENCE_LEFT) // CHARW)


	def on_gaze_target(x, y):
	    return (GAZE_LEFT <= x <= GAZE_LEFT + GAZE_SIZE and
	            H / 2 - GAZE_SIZE / 2 <= y <= H / 2 + GAZE_SIZE / 2)


	def on_corner(x, y):
	    return x > CORNER_X and y > CORNER_Y


	def wait_for_fixation(region, duration=250, timeout=None):
	    """Wait until gaze stays inside `region` for `duration` ms.

	    Returns True on success, False on timeout or when Escape is pressed.
	    """
	    t0 = clock.time()
	    since = None
	    while True:
	        x, y = eyetracker.sample()
	        if region(x, y):
	            if since is None:
	                since = clock.time()
	            elif clock.time() - since >= duration:
	                return True
	        else:
	            since = None
	        key, _ = kb.get_key(timeout=0)
	        if key == 'escape':
	            return False
	        if timeout is not None and clock.time() - t0 >= timeout:
	            return False
	        clock.sleep(5)


	def gaze_target_canvas():
	    c = Canvas(exp)
	    c.rect(GAZE_LEFT - W // 2, -GAZE_SIZE // 2, GAZE_SIZE, GAZE_SIZE,
	           fill=True, color='black')
	    return c
	__end__

define sketchpad instructions
	set start_response_interval no
	set duration keypress
	set description "Instructions"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=True text="Look at the black square at the start of each trial.<br /><br />Then look at the object named in the instruction.<br /><br />When the trial is over, look at the small black square in the bottom-right corner.<br /><br />Then answer the yes/no question: press 1 for SI, 2 for NO.<br /><br />Press any key to start." x=0 y=0 z_index=0

define sketchpad goodbye
	set start_response_interval no
	set duration keypress
	set description "Goodbye"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=True text="The experiment is finished.<br />Thank you!" x=0 y=0 z_index=0

define sketchpad comprehension_question
	set start_response_interval no
	set duration 0
	set description "Comprehension question"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="[question]" x=0 y=-64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="SI" x=-128 y=64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="NO" x=128 y=64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="1 = SI&nbsp;&nbsp;&nbsp;2 = NO" x=0 y=160 z_index=0

define keyboard_response keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects the yes/no response"
	set correct_response "[correct_button]"
	set allowed_responses "1;2"

define sketchpad clear_screen
	set start_response_interval no
	set duration 0
	set description "Blank screen after the response"

define loop trial_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "Trials"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if False
	set column_order "item;sentence;target;competitor;distractor1;distractor2;question;answer"
	setcycle 0 item "1"
	setcycle 0 sentence "Click on the candle"
	setcycle 0 target "candle"
	setcycle 0 competitor "candy"
	setcycle 0 distractor1 "chair"
	setcycle 0 distractor2 "apple"
	setcycle 0 question "Did you look at the candle?"
	setcycle 0 answer "SI"
	setcycle 1 item "2"
	setcycle 1 sentence "Click on the beetle"
	setcycle 1 target "beetle"
	setcycle 1 competitor "beaker"
	setcycle 1 distractor1 "lamp"
	setcycle 1 distractor2 "shoe"
	setcycle 1 question "Did you look at the beetle?"
	setcycle 1 answer "SI"
	run trial_sequence

define inline_script setup_condition
	set description "Set the correct response button"
	___prepare__
	if var.answer == 'SI':
	    var.correct_button = '1'
	elif var.answer == 'NO':
	    var.correct_button = '2'
	else:
	    var.correct_button = 'NA'
	# Avoid stale values from the previous trial when the question is skipped.
	var.response = 'NA'
	var.correct = 'NA'
	var.response_time = 'NA'
	var.trial_aborted = 0
	__end__
	___run__

	__end__

define inline_script prepare_trial
	set description "Prepare the trial canvases"
	___prepare__
	import random

	SIZE = 200
	POS = [(-W // 4, -H // 4), (W // 4, -H // 4), (-W // 4, H // 4), (W // 4, H // 4)]
	objects = [var.target, var.competitor, var.distractor1, var.distractor2]
	random.shuffle(objects)
	var.target_position = objects.index(var.target)


	def scene(instruction=None):
	    c = Canvas(exp)
	    for name, (x, y) in zip(objects, POS):
	        c.rect(x - SIZE // 2, y - SIZE // 2, SIZE, SIZE, color='black')
	        c.text(name, x=x, y=y)       # replace by c.image('name.png', ...) for pictures
	    add_corner(c)
	    if instruction:
	        c.text(instruction, y=-H // 2 + 40)
	    return c


	def region(gx, gy):
	    for i, (x, y) in enumerate(POS):
	        if abs(gx - W / 2 - x) <= SIZE // 2 and abs(gy - H / 2 - y) <= SIZE // 2:
	            return i
	    return None


	preview = scene()
	spoken = scene(var.sentence)
	__end__
	___run__

	__end__

define inline_script show_gaze_target
	set description "Show the gaze-contingent target and wait for fixation"
	___prepare__
	gazetarget_canvas = gaze_target_canvas()
	__end__
	___run__
	gazetarget_canvas.show()
	eyetracker.log('GAZE TARGET ON')
	if wait_for_fixation(on_gaze_target, duration=250, timeout=10000):
	    var.trial_aborted = 0
	else:
	    var.trial_aborted = 1
	    eyetracker.log('GAZE TARGET TIMEOUT/ABORT')
	__end__

define inline_script trial_display
	set description "Show the stimulus and end the trial at the corner"
	___prepare__

	__end__
	___run__
	if var.trial_aborted:
	    eyetracker.log('TRIAL ABORTED')
	else:
	    preview.show()
	    eyetracker.log('PREVIEW_ONSET')
	    clock.sleep(1000)
	    spoken.show()
	    eyetracker.log('SPOKEN_ONSET')          # play a sampler here for real audio
	    t0 = clock.time()
	    counts = [0] * 4
	    while clock.time() - t0 < 4000:
	        gx, gy = eyetracker.sample()
	        r = region(gx, gy)
	        if r is not None:
	            counts[r] += 1
	        clock.sleep(10)
	    for name, n in zip(objects, counts):
	        eyetracker.log('SAMPLES object=%s n=%d' % (name, n))
	    var.target_samples = counts[var.target_position]
	    if not wait_for_fixation(on_corner, duration=100, timeout=60000):
	        eyetracker.log('CORNER TIMEOUT')
	    eyetracker.log('TRIALEND')
	__end__

